PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Deeya Flanker
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent Flankerstim
      letterHeight = 0.05
      startVal [time (s)] = 1
      text [set every repeat] = $flanker
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
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  Routine Thank_You
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    TextComponent thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Thank you for participating
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  Routine Instructions
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    TextComponent intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome

        You will see a row of arrows like this:

        <<<<<     or     <<><<

        Respond to the direction of the MIDDLE arrow only.

        - Press the LEFT arrow key if the middle arrow points left (<)
        - Press the RIGHT arrow key if the middle arrow points right (>)

        Press the SPACEBAR to begin
    KeyboardComponent space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cond_flanker.csv
    loopType = random
    nReps = 20
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    conditions:
      [OrderedDict([('flanker', '<<<<<'), ('correctAns', 'left'), ('condition', 'congruent')]),
      OrderedDict([('flanker', '>>>>>'), ('correctAns', 'right'), ('condition', 'congruent')]),
      OrderedDict([('flanker', '<<><<'), ('correctAns', 'right'), ('condition', 'incongruent')]),
      OrderedDict([('flanker', '>><>>'), ('correctAns', 'left'), ('condition', 'incongruent')])]
    Routine trial
  LoopTerminator trials
  Routine Thank_You
